PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nature-urban-fractal
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine control_video
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    MovieComponent control_video_component
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine parent_video
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    MovieComponent parent_video_component
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine slideshow
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    ImageComponent image
      image [set every repeat] = $"stimuli/images/" + condition + "/" + image_name + ".jpg"
      size = (0.5, 0.5)
      startVal [time (s)] = .2
      stopVal [duration (s)] = 22.2
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine trial
  Routine fixation
  Routine control_video
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature')]),
      OrderedDict([('condition', 'urban')]),
      OrderedDict([('condition', 'nature_fractal')]),
      OrderedDict([('condition', 'urban_fractal')])]
    Routine fixation
    Routine parent_video
    Routine fixation
    LoopInitiator image_loop loopType="TrialHandler"
      conditionsFile = $"stimuli/" + condition + ".csv"
      loopType = sequential
      nReps = 1
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      Routine slideshow
    LoopTerminator image_loop
  LoopTerminator conditions_loop
